#
#       P H Y S I C S
#
/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel

/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel StandardModel

/gate/physics/addProcess RayleighScattering
/gate/physics/processes/RayleighScattering/setModel PenelopeModel

/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-
/gate/physics/processes/ElectronIonisation/setModel StandardModel e+

/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e+

/gate/physics/addProcess PositronAnnihilation

/gate/physics/addProcess MultipleScattering e+
/gate/physics/addProcess MultipleScattering e-

/gate/physics/processList Enabled
/gate/physics/processList Initialized

#
#       C U T S
#
# Cuts for particle in NEMACylinder
#/gate/physics/Gamma/SetCutInRegion      sphere 1.0 cm
#/gate/physics/Electron/SetCutInRegion   sphere 1.0 cm
#/gate/physics/Positron/SetCutInRegion   sphere 1.0 cm

# Cuts for particle in NEMACylinder
#/gate/physics/Gamma/SetCutInRegion      LSO 1.0 cm
#/gate/physics/Electron/SetCutInRegion   LSO 1.0 cm
#/gate/physics/Positron/SetCutInRegion   LSO 1.0 cm

# Cuts for particle in NEMACylinder
#/gate/physics/Gamma/SetCutInRegion      LYSO 1.0 cm
#/gate/physics/Electron/SetCutInRegion   LYSO 1.0 cm
#/gate/physics/Positron/SetCutInRegion   LYSO 1.0 cm
